PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'counterbalance': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = simon_task
  keyboardBackend = ioHub
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Routines
  Routine simon_stimulus
    TextComponent fixation_cross
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent left_stim
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $left_stim_text
      units = norm
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    TextComponent right_stim
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $right_stim_text
      units = norm
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    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z', 'm'
      correctAns = $ans
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      storeCorrect = True
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  Routine simon_setup
    CodeComponent simon_config
      Code Type = Py
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      Begin Routine:
        if expInfo['counterbalance'] == '0':
            bindings = {'X': 'm', 'O': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans='z'
        elif expInfo['counterbalance'] == '1':
            bindings = {'O': 'm', 'X': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = simon_task_order.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{'condition': 'incongruent', 'stim': 'X'},
      {'condition': 'congruent', 'stim': 'X'},
      {'condition': 'incongruent', 'stim': 'O'},
      {'condition': 'congruent', 'stim': 'O'}]
    Routine simon_setup
    Routine simon_stimulus
  LoopTerminator trials
